OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream -> 0x341d3912 EDF File Writer
  Filename = C:/Users/milio/PycharmProjects/Stage/OpenVibe/enregistrement_en_cours/record.edf
Input Signal=#0.Signal stream -> Generic stream writer Pour BackUp
  Filename = C:/Users/milio/PycharmProjects/Stage2024/OpenVibe/enregistrement_en_cours/recordBackup-[$core{date}-$core{time}].ov
  Use compression = false
Input Signal=#0.Signal stream -> Generic stream writer
  Filename = C:/Users/milio/PycharmProjects/Stage2024/OpenVibe/enregistrement_en_cours/record.ov
  Use compression = false
