<OpenViBE-Scenario>
	<FormatVersion>2</FormatVersion>
	<Creator>OpenViBE Designer</Creator>
	<CreatorVersion>3.6.0</CreatorVersion>
	<Settings></Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x00000747, 0x0000363a)</Identifier>
			<Name>LSL Communication</Name>
			<AlgorithmClassIdentifier>(0xc07934f5, 0x9390e102)</AlgorithmClassIdentifier>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>144</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>816</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x8c5c26fc, 0x3ec93181)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002b5a, 0x000004e5)</Identifier>
			<Name>Generic stream reader</Name>
			<AlgorithmClassIdentifier>(0x6468099f, 0x0370095a)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output Signal</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Output Stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue></DefaultValue>
					<Value>C:/Users/milio/PycharmProjects/Stage/OpenVibe/enregistrement_en_cours/record.ov</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>64</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>224</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xf37b8e7a, 0x1bc33e4e)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002b8b, 0x00001dee)</Identifier>
			<Name>Lua Stimulator</Name>
			<AlgorithmClassIdentifier>(0x0b5a2787, 0x02750621)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0xb0d0db45, 0x49cbc34a)</TypeIdentifier>
					<Name>Lua Script</Name>
					<DefaultValue></DefaultValue>
					<Value>C:/Users/milio/PycharmProjects/Stage/OpenVibe/ScriptLua/algoLuaListe.lua</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>64</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>432</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xd6e3f48b, 0xbee3523a)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x61d11811, 0x71e65362)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xf191c1c8, 0xa0123976)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002e5f, 0x0000122b)</Identifier>
			<Name>Generic stream writer</Name>
			<AlgorithmClassIdentifier>(0x09c92218, 0x7c1216f8)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input Signal</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input Stimulations</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue>record-[$core{date}-$core{time}].ov</DefaultValue>
					<Value>C:/Users/milio/PycharmProjects/Stage/OpenVibe/enregistrements_avec_stim/recordStim.ov</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Use compression</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>320</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>528</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x89a08108, 0xc8d1fac1)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000071ba, 0x000038eb)</Identifier>
			<Name>Signal display</Name>
			<AlgorithmClassIdentifier>(0x0055be5f, 0x087bdd12)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Data</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6ab26b81, 0x0f8c02f3)</TypeIdentifier>
					<Name>Channel Units</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x5de046a6, 0x086340aa)</TypeIdentifier>
					<Name>Display Mode</Name>
					<DefaultValue>Scan</DefaultValue>
					<Value>Scan</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x33a30739, 0x00d5299b)</TypeIdentifier>
					<Name>Auto vertical scale</Name>
					<DefaultValue>Per channel</DefaultValue>
					<Value>Per channel</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Scale refresh interval (secs)</Name>
					<DefaultValue>5</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Scale</Name>
					<DefaultValue>100</DefaultValue>
					<Value>100.000000</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Vertical Offset</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Time Scale</Name>
					<DefaultValue>10</DefaultValue>
					<Value>10</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Bottom ruler</Name>
					<DefaultValue>true</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Left ruler</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Multiview</Name>
					<DefaultValue>false</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>320</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>384</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x92c056a7, 0x2dc71aff)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>9</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x0000793a, 0x0000399d)</Identifier>
			<Name>EDF File Writer Pour BackUp</Name>
			<AlgorithmClassIdentifier>(0x0d454dce, 0x470a4c02)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Experiment information</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue>record-[$core{date}-$core{time}].edf</DefaultValue>
					<Value>C:/Users/milio/PycharmProjects/Stage/OpenVibe/enregistrements_avec_stim/recordStimBackUp-[$core{date}-$core{time}].edf</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>320</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>96</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xd41e3037, 0xcc12644a)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x0000793a, 0x0000399e)</Identifier>
			<Name>EDF File Writer</Name>
			<AlgorithmClassIdentifier>(0x0d454dce, 0x470a4c02)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Experiment information</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue>record-[$core{date}-$core{time}].edf</DefaultValue>
					<Value>C:/Users/milio/PycharmProjects/Stage/OpenVibe/enregistrements_avec_stim/recordStim.edf</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>320</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>256</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xd41e3037, 0xcc12644a)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x000006a9, 0x00005f29)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b8b, 0x00001dee)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00002e5f, 0x0000122b)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00000a25, 0x00003b4b)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b5a, 0x000004e5)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00002e5f, 0x0000122b)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x0000115a, 0x0000738e)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b5a, 0x000004e5)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x0000793a, 0x0000399d)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00001cc2, 0x00006e61)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b8b, 0x00001dee)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x0000793a, 0x0000399d)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006259, 0x00005916)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b8b, 0x00001dee)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000071ba, 0x000038eb)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006957, 0x00006ab6)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b8b, 0x00001dee)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x0000793a, 0x0000399e)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00007353, 0x000061ed)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b5a, 0x000004e5)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x0000793a, 0x0000399e)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00007d31, 0x00004b79)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002b5a, 0x000004e5)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000071ba, 0x000038eb)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
	</Links>
	<Comments></Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x00002a3f, 0x00005628)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"height":320,"identifier":"(0x00002476, 0x00001375)","name":"Default window","parentIdentifier":"(0xffffffff, 0xffffffff)","type":1,"width":480},{"boxIdentifier":"(0x000071ba, 0x000038eb)","childCount":0,"identifier":"(0x00007ab4, 0x000009d6)","parentIdentifier":"(0xffffffff, 0xffffffff)","type":3},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"identifier":"(0x00002cab, 0x00006ea0)","index":0,"name":"Default tab","parentIdentifier":"(0x00002476, 0x00001375)","type":2},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":0,"identifier":"(0x00007f67, 0x00000ad2)","index":0,"name":"Empty","parentIdentifier":"(0x00002cab, 0x00006ea0)","type":0}]</Data>
		</Entry>
	</Metadata>
</OpenViBE-Scenario>